CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:37
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "tdT")
    Name to assign these images:tdT
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Ki67-488")
    Name to assign these images:Ki67
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "pRB-647")
    Name to assign these images:pRB
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DAPI
    Name the output image:DAPI_rescale
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.0625
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
RescaleIntensity:[module_num:6|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
    Select the input image:Ki67
    Name the output image:Ki67_rescale
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.0625
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
RescaleIntensity:[module_num:7|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
    Select the input image:pRB
    Name the output image:pRB_rescale
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.0625
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
RescaleIntensity:[module_num:8|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
    Select the input image:tdT
    Name the output image:tdT_rescale
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.0625
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
Smooth:[module_num:9|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
    Select the input image:tdT_rescale
    Name the output image:tdT_rescale_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:8
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
Smooth:[module_num:10|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
    Select the input image:Ki67_rescale
    Name the output image:Ki67_rescale_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:8
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
Smooth:[module_num:11|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
    Select the input image:pRB_rescale
    Name the output image:pRB_rescale_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:8
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
MeasureImageIntensity:[module_num:12|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
    Select the image to measure:Ki67_rescale_smooth
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:pRB_rescale_smooth
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:tdT_rescale_smooth
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:13|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Ki67_rescale_smooth_subtract
    Image or measurement?:Image
    Select the first image:Ki67_rescale_smooth
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MedianIntensity_Ki67_rescale_smooth

ImageMath:[module_num:14|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:pRB_rescale_smooth_subtract
    Image or measurement?:Image
    Select the first image:pRB_rescale_smooth
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MedianIntensity_pRB_rescale_smooth

ImageMath:[module_num:15|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:tdT_rescale_smooth_subtract
    Image or measurement?:Image
    Select the first image:tdT_rescale_smooth
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MedianIntensity_tdT_rescale_smooth

IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:tdT_rescale_smooth_subtract
    Name the primary objects to be identified:tdT_positive
    Typical diameter of objects, in pixel units (Min,Max):25,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0025,1.0
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    Two-class or three-class thresholding?:Two classes
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
ExpandOrShrinkObjects:[module_num:17|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
    Select the input objects:tdT_positive
    Name the output objects:tdT_positive_expand
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MeasureObjectIntensity:[module_num:18|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
    Hidden:2
    Select an image to measure:Ki67_rescale_smooth_subtract
    Select an image to measure:pRB_rescale_smooth_subtract
    Select objects to measure:tdT_positive_expand

MeasureImageIntensity:[module_num:19|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
    Select the image to measure:DAPI
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:Ki67
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:pRB
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:tdT
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:DAPI_rescale
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:Ki67_rescale
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:pRB_rescale
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:tdT_rescale
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:Ki67_rescale_smooth_subtract
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:pRB_rescale_smooth_subtract
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:tdT_rescale_smooth_subtract
    Measure the intensity only from areas enclosed by objects?:No
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
GrayToColor:[module_num:20|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
    Select a color scheme:RGB
    Select the image to be colored red:tdT_rescale_smooth_subtract
    Select the image to be colored green:Ki67_rescale_smooth_subtract
    Select the image to be colored blue:DAPI_rescale
    Name the output image:Merge_Ki67
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
GrayToColor:[module_num:21|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
    Select a color scheme:RGB
    Select the image to be colored red:tdT_rescale_smooth_subtract
    Select the image to be colored green:pRB_rescale_smooth_subtract
    Select the image to be colored blue:DAPI_rescale
    Name the output image:Merge_pRB
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:Yes
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    Name the output image:Blank_outline
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max possible
    How to outline:Inner
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    Select objects to display:tdT_positive_expand

ClassifyObjects:[module_num:23|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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:tdT_positive_expand
    Select the measurement to classify by:Intensity_UpperQuartileIntensity_Ki67_rescale_smooth_subtract
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.01
    Give each bin a name?:Yes
    Enter the bin names separated by commas:Ki67_neg,Ki67_pos
    Retain an image of the classified objects?:Yes
    Name the output image:Ki67_classify
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
ClassifyObjects:[module_num:24|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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:tdT_positive_expand
    Select the measurement to classify by:Intensity_UpperQuartileIntensity_pRB_rescale_smooth_subtract
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.04
    Give each bin a name?:Yes
    Enter the bin names separated by commas:pRB_neg,pRB_pos
    Retain an image of the classified objects?:Yes
    Name the output image:pRB_classify
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
FilterObjects:[module_num:25|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
    Select the objects to filter:tdT_positive_expand
    Name the output objects:Ki67_pos
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Classify_Ki67_pos
    Filter using a minimum measurement value?:Yes
    Minimum value:1.0
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:26|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
    Select the objects to filter:tdT_positive_expand
    Name the output objects:Ki67_neg
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Classify_Ki67_neg
    Filter using a minimum measurement value?:Yes
    Minimum value:1.0
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:27|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
    Select the objects to filter:tdT_positive_expand
    Name the output objects:pRB_pos
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Classify_pRB_pos
    Filter using a minimum measurement value?:Yes
    Minimum value:1.0
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:28|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
    Select the objects to filter:tdT_positive_expand
    Name the output objects:pRB_neg
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Classify_pRB_neg
    Filter using a minimum measurement value?:Yes
    Minimum value:1.0
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:29|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:tdT_rescale_smooth_subtract
    Name the output image:tdT_objects
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FEFEFE
    Select objects to display:tdT_positive_expand

OverlayOutlines:[module_num:30|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Merge_Ki67
    Name the output image:_Ki67_objects
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FEFEFE
    Select objects to display:Ki67_pos
    Select outline color:#FC7F08
    Select objects to display:Ki67_neg

OverlayOutlines:[module_num:31|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Merge_pRB
    Name the output image:_pRB_objects
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FEFEFE
    Select objects to display:pRB_pos
    Select outline color:#FC7F08
    Select objects to display:pRB_neg

SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:_Ki67_objects
    Select method for constructing file names:From image filename
    Select image name for file prefix:tdT
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Ki67_objects
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:33|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
    Select the type of image to save:Image
    Select the image to save:_pRB_objects
    Select method for constructing file names:From image filename
    Select image name for file prefix:tdT
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_pRB_objects
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:34|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
    Select the type of image to save:Image
    Select the image to save:tdT_objects
    Select method for constructing file names:From image filename
    Select image name for file prefix:tdT
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_tdTobjects
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:35|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
    Select the type of image to save:Image
    Select the image to save:Ki67_classify
    Select method for constructing file names:From image filename
    Select image name for file prefix:tdT
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Ki67
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:36|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
    Select the type of image to save:Image
    Select the image to save:pRB_classify
    Select method for constructing file names:From image filename
    Select image name for file prefix:tdT
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_pRB
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:37|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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