CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file does startwith "python_")

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "(DAPI auto)")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "(Ki67-488 400 msec)")
    Name to assign these images:Ki67
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "(pRB-647 2500 msec)")
    Name to assign these images:pRB
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "(tdT 50 msec)")
    Name to assign these images:tdT
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:tdT
    Name the output image:tdT_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:4.0
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
MeasureImageIntensity:[module_num:6|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
    Select the image to measure:tdT_smooth
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:7|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:4.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:tdT_smooth_backgroundSubtract
    Image or measurement?:Image
    Select the first image:tdT_smooth
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MedianIntensity_tdT_smooth

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:tdT_smooth_backgroundSubtract
    Name the primary objects to be identified:opc
    Typical diameter of objects, in pixel units (Min,Max):20,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:10.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.15,1.0
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    Two-class or three-class thresholding?:Two classes
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
Smooth:[module_num:9|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
    Select the input image:Ki67
    Name the output image:Ki67_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:4.0
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
Smooth:[module_num:10|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
    Select the input image:pRB
    Name the output image:pRB_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:4.0
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
MeasureImageIntensity:[module_num:11|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
    Select the image to measure:Ki67_smooth
    Measure the intensity only from areas enclosed by objects?:No
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
MeasureImageIntensity:[module_num:12|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
    Select the image to measure:pRB_smooth
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:13|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Ki67_smooth_backgroundSubtract
    Image or measurement?:Image
    Select the first image:Ki67_smooth
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MedianIntensity_Ki67_smooth

ImageMath:[module_num:14|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:pRB_smooth_backgroundSubtract
    Image or measurement?:Image
    Select the first image:pRB_smooth
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MedianIntensity_pRB_smooth

MeasureObjectIntensity:[module_num:15|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
    Hidden:2
    Select an image to measure:Ki67_smooth_backgroundSubtract
    Select an image to measure:pRB_smooth_backgroundSubtract
    Select objects to measure:opc

ImageMath:[module_num:16|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:tdT_backgroundSubtract
    Image or measurement?:Image
    Select the first image:tdT
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MedianIntensity_tdT_smooth

ImageMath:[module_num:17|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Ki67_backgroundSubtract
    Image or measurement?:Image
    Select the first image:Ki67
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MedianIntensity_Ki67_smooth

ImageMath:[module_num:18|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:pRB_backgroundSubtract
    Image or measurement?:Image
    Select the first image:pRB
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MedianIntensity_pRB_smooth

GrayToColor:[module_num:19|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
    Select a color scheme:RGB
    Select the image to be colored red:tdT_backgroundSubtract
    Select the image to be colored green:Ki67_backgroundSubtract
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    Name the output image:RGB_tdT_Ki67
    Relative weight for the red image:4.0
    Relative weight for the green image:4.0
    Relative weight for the blue image:1.0
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
GrayToColor:[module_num:20|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
    Select a color scheme:RGB
    Select the image to be colored red:tdT_backgroundSubtract
    Select the image to be colored green:pRB_backgroundSubtract
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    Name the output image:RGB_tdT_pRB
    Relative weight for the red image:4.0
    Relative weight for the green image:4.0
    Relative weight for the blue image:1.0
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
DisplayDataOnImage:[module_num:21|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
    Display object or image measurements?:Object
    Select the input objects:opc
    Measurement to display:Intensity_UpperQuartileIntensity_Ki67_smooth_backgroundSubtract
    Select the image on which to display the measurements:RGB_tdT_Ki67
    Text color:#FEFEFE
    Name the output image that has the measurements displayed:DisplayImage_Ki67
    Font size (points):24
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:22|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
    Display object or image measurements?:Object
    Select the input objects:opc
    Measurement to display:Intensity_UpperQuartileIntensity_pRB_smooth_backgroundSubtract
    Select the image on which to display the measurements:RGB_tdT_pRB
    Text color:#FEFEFE
    Name the output image that has the measurements displayed:DisplayImage_pRB
    Font size (points):24
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage_Ki67
    Select method for constructing file names:From image filename
    Select image name for file prefix:tdT
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Ki67_overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage_pRB
    Select method for constructing file names:From image filename
    Select image name for file prefix:tdT
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_pRB_overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:opc|Intensity_MassDisplacement_Ki67_smooth_backgroundSubtract,opc|Intensity_MassDisplacement_pRB_smooth_backgroundSubtract,opc|Intensity_MinIntensity_Ki67_smooth_backgroundSubtract,opc|Intensity_MinIntensity_pRB_smooth_backgroundSubtract,opc|Intensity_StdIntensity_Ki67_smooth_backgroundSubtract,opc|Intensity_StdIntensity_pRB_smooth_backgroundSubtract,opc|Intensity_IntegratedIntensityEdge_Ki67_smooth_backgroundSubtract,opc|Intensity_IntegratedIntensityEdge_pRB_smooth_backgroundSubtract,opc|Intensity_MinIntensityEdge_Ki67_smooth_backgroundSubtract,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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